---
API: 2.1
OpenSesame: 3.3.14
Platform: nt
---
set width 1024
set uniform_coordinates yes
set title "Digit span experiment"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend psycho
set round_decimals 2
set mouse_backend psycho
set keyboard_backend psycho
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "C:/Users/kabay/Downloads/eksperyment-na-pp"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set background black

define form_text_input Answer
	set timeout infinite
	set spacing 10
	set rows "1;1;6"
	set only_render no
	set margins "50;50;50;50"
	set form_var response
	set form_title Recall
	set form_question "What were the numbers, in order? Enter them and then hit Return to continue..."
	set description "A simple text input form"
	set cols 1
	set _theme gray
	widget 0 0 1 1 label text="[form_title]"
	widget 0 1 1 1 label center=no text="[form_question]"
	widget 0 2 1 1 text_input focus=yes return_accepts=yes stub="" var="[form_var]"


define sketchpad ISI
	set duration 445
	set description "Displays stimuli"

define sketchpad ISI_1
	set duration 445
	set description "Displays stimuli"

define form_text_display Instructions
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Ok
	set margins "50;50;50;50"
	set form_title Title
	__form_text__
	Szanowny uczestniku,
	
	Zapraszamy do udziału w naszym badaniu naukowym dotyczącym pojemności pamięci roboczej.
	
	Jeśli zdecydujesz się wziąc udział, zostaniesz poproszony o wykonanie serii zadań polegających na odpamiętaniu wyświetlonych cyfr/liczb. Całe badanie powinno zająć około 15 minut. 
	
	Odpowiedzi zostaną zachowane w tajemnicy. Informujemy jednocześnie, że tożsamość uczestników nie jest zapisywana.
	
	Dostęp do wyników, będzie miał tylko zespół badawczy, a dane zebrane podczas badania zostaną wykorzystane w ramach pisania artykułu naukowego, który jest częścią pracy zaliczeniowej. Artykuł nie zostanie opublikowany w żadnym czasopiśmie.
	
	W razie jakichkolwiek pytań lub wątpliwości dotyczących badania, prosimy o kontakt z nami pod adresem: jakubkarp.kontakt@gmail.com.
	
	Dziękujemy za rozważnie udziału w naszym badaniu.
	
	Z poważaniem,
	
	zespół badawczy.
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define sketchpad Intro
	set reset_variables no
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="In this experiment you will see a sequence of numbers.<br/><br/>Your job will be to remember those numbers<br/>in order.<br/><br/>Once you enter the numbers into the box<br/> hit the SPACE BAR to continue." x=0 y=0 z_index=0

define sketchpad Next
	set reset_variables no
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Press the SPACE BAR when you're ready<br/>to continue to the next sequence of numbers" x=0 y=0 z_index=0

define sketchpad Recall
	set reset_variables no
	set duration 495
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=always text="Recall..." x=0 y=0 z_index=0

define keyboard_response SPACE_BAR
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses SPACE

define keyboard_response SPACE_BAR_1
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses SPACE

define keyboard_response SPACE_BAR_2
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses SPACE

define inline_script Set_Variables
	set description "Executes Python code"
	___run__
	#Set duration for each number
	exp.set("NumDur",745)
	#Set ISI
	exp.set("ISIdur",500)
	#Set time for participants to hold sequence in WM
	exp.set("DotDur",3000)
	__end__
	set _prepare ""

define sequence Trials
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run reset_feedback always
	run block_loop always
	run feedback always

define sketchpad Welcome
	set reset_variables no
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Welcome to the experiment.<br/>Your Participant Code is [subject_nr].<br/><br/>Press the SPACE BAR to continue" x=0 y=0 z_index=0

define loop block_loop
	set source_file "practiceSet.xlsx"
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 6
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 num1 2
	setcycle 0 num2 1
	setcycle 0 num3 3
	setcycle 0 num4 7
	setcycle 1 num1 ""
	setcycle 1 num2 ""
	setcycle 1 num3 ""
	setcycle 1 num4 ""
	setcycle 2 num1 ""
	setcycle 2 num2 ""
	setcycle 2 num3 ""
	setcycle 2 num4 ""
	setcycle 3 num1 ""
	setcycle 3 num2 ""
	setcycle 3 num3 ""
	setcycle 3 num4 ""
	setcycle 4 num1 ""
	setcycle 4 num2 ""
	setcycle 4 num3 ""
	setcycle 4 num4 ""
	setcycle 5 num1 ""
	setcycle 5 num2 ""
	setcycle 5 num3 ""
	setcycle 5 num4 ""
	run trial_sequence

define form_text_display end_of_practice
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text "Rozumiem!"
	set margins "50;50;50;50"
	set form_title "<span size=34>Instrukcje</span>"
	__form_text__
	Część przeznaczona na praktykę została zakończona.
	Jeżeli potrzebujesz ją potwórzyć, naciśnij "R".
	Aby kontynuować naciśnij "Rozumiem!".
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Instructions always
	run Welcome always
	run SPACE_BAR always
	run form_consent always
	run Intro always
	run SPACE_BAR_1 always
	run Set_Variables always
	run practice_loop always
	run end_of_practice always
	run experimental_loop always

define loop experimental_loop
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 practice no
	run Trials

define feedback feedback
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=sans font_italic=no font_size=32 html=yes show_if=always text="Koniec części<br /><br />Twój średni czas odpowiedzi wyniósł [avg_rt] milisekund.<br /><br />Twoja poprawność wyniosła [acc] %<br /><br />Naciśnij dowolny przycisk aby kontynuować" x=-6 y=-5 z_index=0

define sketchpad fixation
	set duration 745
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0

define form_consent form_consent
	set timeout infinite
	set spacing 10
	set rows "1;4;1;1"
	set only_render no
	set margins "50;50;50;50"
	set form_title "<span size=24>Consent Form</span>"
	__form_text__
	You are about to participate in a series of brief experiments.
	
	This experiment poses no known risks to your health and your name will not be associated with the findings.
	
	Upon completion of your participation in this study, you will be provided with a brief explanation of the question this study addresses.
	
	If you have any questions not addressed by this consent form, please do not hesitate to ask.
	
	You can stop at any time during experiment if you feel uncomfortable.
	__end__
	set description "A simple consent form"
	set decline_text "Do not participate"
	set decline_message "You need to accept the consent form to participate!"
	set cols "2;2"
	set checkbox_text "I have read and understood the information shown above"
	set accept_text "Participate!"
	set _theme gray
	widget 0 0 2 1 label text="[form_title]"
	widget 0 1 2 1 label center=no text="[form_text]"
	widget 0 2 2 1 checkbox text="[checkbox_text]" var=checkbox_status
	widget 0 3 1 1 button text="[accept_text]" var=accept_status
	widget 1 3 1 1 button text="[decline_text]"


define form_text_display instructions_1
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text "Rozumiem!"
	set margins "50;50;50;50"
	set form_title "<span size=34>Instrukcje</span>"
	set form_text "Your message"
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define keyboard_response keyboard_response
	set timeout 10000
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "0;1;2;3;4;5;6;7;8;9;"

define logger logger
	set description "Logs experimental data"
	set auto_log yes

define form_text_display new_form_text_display
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Ok
	set margins "50;50;50;50"
	set form_title end_of_experiment
	set form_text "Your message"
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define sketchpad num1
	set duration 1500
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="[num1]" x=0 y=0 z_index=0

define sketchpad num2
	set duration 1500
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="[num2]<br />" x=0 y=0 z_index=0

define loop practice_loop
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 practice yes
	run Trials

define reset_feedback reset_feedback
	set description "Resets the feedback variables, such as 'avg_rt' and 'acc'"

define sequence trial_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run num1 always
	run ISI always
	run num2 always
	run ISI_1 always
	run fixation always
	run Recall always
	run Answer always
	run logger always
	run Next always
	run SPACE_BAR_2 always

